PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Incomplete URL = incompleteURL
  expName = TimingTask
  Completed URL = completedURL
  Screen = 1
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Routines
  Routine instr1
    TextComponent insRound1
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Two stimuli will appear on the screen.

        One white circle, and one black circle, for different durations.

        If you believe that the first stimulus appeared
        for a longer duration, press the LEFT arrow key.

        If you believe that the second stimulus appeared for
        a longer duration, press the RIGHT arrow key.

        Press space bar to proceed.
    KeyboardComponent respRound1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Block starts

        Press space
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine round1_3
    PolygonComponent firstcircle_3
      shape = regular polygon...
      startVal [time (s)] = 0.5
      size = (0.3, 0.5)
      fillColor = $[1,1,1]
      nVertices = 50
      stopVal [duration (s)] = $firstTime
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    KeyboardComponent rtRound1_3
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'left','right'
      startVal [time (s)] = $respStart
      syncScreenRefresh = False
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    TextComponent text_3
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = $plusStart
      letterHeight = 0.1
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    PolygonComponent secondcircle
      shape = regular polygon...
      startVal [time (s)] = $secondStart
      size = (0.3, 0.5)
      fillColor = $[-1,-1,-1]
      nVertices = 50
      stopVal [duration (s)] = $secondTime
      lineColor = $[-1,-1,-1]
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    TextComponent text_4
      text = next
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instr1
  LoopInitiator Block loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine block
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditionsTime.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('firstTime', 0.7), ('secondTime', 1.4), ('corrAns', 'right'), ('plusStart', 1.2), ('secondStart', 2.2), ('respStart', 3.6)]),
        OrderedDict([('firstTime', 2.5), ('secondTime', 1.5), ('corrAns', 'left'), ('plusStart', 3.0), ('secondStart', 4.0), ('respStart', 5.5)]),
        OrderedDict([('firstTime', 1.2), ('secondTime', 1.8), ('corrAns', 'right'), ('plusStart', 1.7), ('secondStart', 2.7), ('respStart', 4.5)]),
        OrderedDict([('firstTime', 3.3), ('secondTime', 4.4), ('corrAns', 'right'), ('plusStart', 3.8), ('secondStart', 4.8), ('respStart', 9.2)]),
        OrderedDict([('firstTime', 9.9), ('secondTime', 8.8), ('corrAns', 'left'), ('plusStart', 10.4), ('secondStart', 11.4), ('respStart', 20.2)]),
        OrderedDict([('firstTime', 1.8), ('secondTime', 0.9), ('corrAns', 'left'), ('plusStart', 2.3), ('secondStart', 3.3), ('respStart', 4.2)]),
        OrderedDict([('firstTime', 2.1), ('secondTime', 3.5), ('corrAns', 'right'), ('plusStart', 2.6), ('secondStart', 3.6), ('respStart', 7.1)]),
        OrderedDict([('firstTime', 2.7), ('secondTime', 1.8), ('corrAns', 'left'), ('plusStart', 3.2), ('secondStart', 4.2), ('respStart', 6.0)]),
        OrderedDict([('firstTime', 2.8), ('secondTime', 2.1), ('corrAns', 'left'), ('plusStart', 3.3), ('secondStart', 4.3), ('respStart', 6.4)]),
        OrderedDict([('firstTime', 3.2), ('secondTime', 3.6), ('corrAns', 'right'), ('plusStart', 3.7), ('secondStart', 4.7), ('respStart', 8.3)])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
      Routine round1_3
    LoopTerminator trials
  LoopTerminator Block
